<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.ONIX;assembly=Bonsai.ONIX"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ONIContext">
          <p1:ContextConfiguration>
            <p1:Slot>
              <p1:Driver>riffa</p1:Driver>
              <p1:Index>0</p1:Index>
            </p1:Slot>
            <p1:ReadSize>2048</p1:ReadSize>
            <p1:WriteSize>2048</p1:WriteSize>
          </p1:ContextConfiguration>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:BNO055Device">
          <p1:DeviceAddress>
            <p1:HardwareSlot>
              <p1:Driver>riffa</p1:Driver>
              <p1:Index>0</p1:Index>
            </p1:HardwareSlot>
            <p1:Address>258</p1:Address>
          </p1:DeviceAddress>
          <p1:Hub>
            <p1:Address>1</p1:Address>
            <p1:HardwareID>3</p1:HardwareID>
            <p1:FirmwareVersion>256</p1:FirmwareVersion>
            <p1:ClockHz>40000000</p1:ClockHz>
            <p1:DelayNanoSeconds>0</p1:DelayNanoSeconds>
          </p1:Hub>
          <p1:FrameClockHz>250000000</p1:FrameClockHz>
          <p1:EnableStream>true</p1:EnableStream>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Quaternion</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Commutator</Name>
        <Description>Drives ONIX Commutator from BNO055 Quaterion data. Pressing down/up keys will manually turn the commutator, overrding the BNO055 heading input.
</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.1S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Up</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>"{turn : 0.1}"</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Down</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>"{turn : -0.1}"</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:PythonTransform">
              <scr:Name>Heading</scr:Name>
              <scr:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *
from math import atan2
@returns(float)
def process(value):

  q0 = value[0].Val0;
  q1 = value[1].Val0;
  q2 = value[2].Val0;
  q3 = value[3].Val0;

  return atan2((2 * (q0 * q3 + q1 * q2)), (1 - 2 * (q2**2 + q3**2)))</scr:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:PythonTransform">
              <scr:Script>from math import pi

@returns(str)
def process(value):
  
  
  last = value.Item2

  curr = value.Item1
  a1 = curr + 2 * pi
  a2 = curr - 2 * pi
  pos = [curr, a1, a2]

  delta = [abs(x - last) for x in pos]

  p = pos[delta.index(min(delta))]

  turn = (p - last) / (2 * pi)

  return "{turn : %s}" % turn</scr:Script>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="io:SerialStringWrite">
                  <io:PortName>COM3</io:PortName>
                  <io:NewLine>\r\n</io:NewLine>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="7" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="11" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="11" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source3" />
            <Edge From="11" To="13" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>