WorkflowBuilder(Version=2.6.0)
Bonsai.ONIX.ONIContext(ContextConfiguration(Slot(Driver=riffa, Index=0), ReadSize=20000, WriteSize=2048))

Bonsai.ONIX.NeuropixelsV1Device
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=256)
  Hub(Address=1, HardwareID=3, FirmwareVersion=256, ClockHz=40000000, DelayNanoSeconds=1)
  FrameClockHz=250000000
  EnableStream=true
  Configuration
    DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=256)
    ConfigProbeSN=nil
    PerformReadCheck=false
    Mode=RECORD
    Channels
      NeuropixelsV1Channel
        Index=0
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
      NeuropixelsV1Channel
        Index=1
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
      NeuropixelsV1Channel
        Index=2
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
      NeuropixelsV1Channel
        Index=3
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
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    ADCs
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
  RequireSNMatch=false
  BlockSize=10
-> MemberSelector(Selector=SpikeData) => #2
Bonsai.ONIX.NeuropixelsV1Device
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=257)
  Hub(Address=1, HardwareID=3, FirmwareVersion=256, ClockHz=40000000, DelayNanoSeconds=1)
  FrameClockHz=250000000
  EnableStream=true
  Configuration
    DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=257)
    ConfigProbeSN=nil
    PerformReadCheck=false
    Mode=RECORD
    Channels
      NeuropixelsV1Channel
        Index=0
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
      NeuropixelsV1Channel
        Index=1
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
      NeuropixelsV1Channel
        Index=2
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
      NeuropixelsV1Channel
        Index=3
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
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    ADCs
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
  RequireSNMatch=false
  BlockSize=10
-> MemberSelector(Selector=SpikeData) => #4
#2, #4 -> Zip
-> Bonsai.Dsp.Concat(Axis=0)
-> Bonsai.ONIX.Design.CreateGraphicsDataModel(BufferLength=250, InternalFormat=R16)
-> Bonsai.ONIX.Design.DrawGraphicsDataModel(ShaderName=probe_image, TextureUniformName=uTexture)

Bonsai.Shaders.CreateWindow
  Width=640
  Height=480
  Title="Spike Data"
  VSync=Off
  SwapSync=false
  ClearColor=Transparent
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Normal
  DisplayDevice=Primary
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=probe_image
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=quad.vert
      FragmentShader=probe_image.frag
-> Bonsai.Resources.LoadResources

Bonsai.ONIX.MemoryUsageDevice
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=10)
  Hub(Address=0, HardwareID=1, FirmwareVersion=1, ClockHz=250000000, DelayNanoSeconds=0)
  FrameClockHz=250000000
  EnableStream=true
  UpdateHz=100
-> MemberSelector(Selector=MemoryUsagePercentage)
