WorkflowBuilder(Version=2.8.0)
Bonsai.ONIX.ONIContext(ContextConfiguration(Slot(Driver=riffa, Index=0), ReadSize=5000, WriteSize=2048))

Bonsai.ONIX.NeuropixelsV1eDevice => #1
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=8)
  BlockSize=30
  EnableStream=true
  Configuration
    DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=8)
    ConfigProbeSN=18005111741
    PerformReadCheck=false
    CalibrationFolderPath=C:\Users\open-ephys\public\Bonsai-Stuff\Bonsai.ONIX\ExampleWorkflows\NeuropixelsV1e\18005111741
    Mode=RECORD
    Channels
      NeuropixelsV1Channel
        Index=0
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
      NeuropixelsV1Channel
        Index=1
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
      NeuropixelsV1Channel
        Index=2
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
      NeuropixelsV1Channel
        Index=3
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
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      NeuropixelsV1Channel
        Index=42
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=true
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
      NeuropixelsV1Channel
        Index=43
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
      NeuropixelsV1Channel
        Index=44
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
      NeuropixelsV1Channel
        Index=45
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
      NeuropixelsV1Channel
        Index=46
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
          NeuropixelsV1GainCorrection
            APx50Correction=1.058378
            APx125Correction=1.058378
            APx250Correction=1.063019
            APx500Correction=1.033686
            APx1000Correction=1.049433
            APx1500Correction=1.049433
            APx2000Correction=1.049433
            APx3000Correction=1.049433
            LFPx50Correction=0.964578
            LFPx125Correction=0.964578
            LFPx250Correction=0.968135
            LFPx500Correction=0.93983
            LFPx1000Correction=0.955935
            LFPx1500Correction=0.955935
            LFPx2000Correction=0.955935
            LFPx3000Correction=0.955935
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    ADCs
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=2, Coarse=2, Fine=1, Cfix=1, Offset=4, Threshold=513)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=1, Coarse=2, Fine=2, Cfix=1, Offset=3, Threshold=513)
      NeuropixelsV1ADC(CompP=15, CompN=15, Slope=1, Coarse=1, Fine=1, Cfix=0, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=1, Coarse=1, Fine=1, Cfix=1, Offset=4, Threshold=514)
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  RequireSNMatch=true
-> MemberSelector(Selector=FrameCounter)
-> Bonsai.Dsp.MatrixWriter(Path=frame-counter_.raw, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
#1 -> MemberSelector(Selector=LFPClock)
-> Bonsai.Dsp.MatrixWriter(Path=lfp-clock_.raw, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
#1 -> MemberSelector(Selector=LFPData)
-> Bonsai.Dsp.MatrixWriter(Path=lfp_.raw, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
#1 -> MemberSelector(Selector=Clock)
-> Bonsai.Dsp.MatrixWriter(Path=spike-clock_.raw, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
#1 -> MemberSelector(Selector=SpikeData)
-> Bonsai.Dsp.MatrixWriter(Path=spike_.raw, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
