<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.ONIX;assembly=Bonsai.ONIX"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ONIContext">
          <p1:ContextConfiguration>
            <p1:Slot>
              <p1:Driver>riffa</p1:Driver>
              <p1:Index>0</p1:Index>
            </p1:Slot>
            <p1:ReadSize>2048</p1:ReadSize>
            <p1:WriteSize>2048</p1:WriteSize>
          </p1:ContextConfiguration>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:MouseButtonDown">
          <wie:Filter>Middle</wie:Filter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Enable" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:OpticalStimulationDevice">
          <p1:DeviceAddress>
            <p1:Valid>true</p1:Valid>
            <p1:HardwareSlot>
              <p1:Driver>riffa</p1:Driver>
              <p1:Index>0</p1:Index>
            </p1:HardwareSlot>
            <p1:Address>260</p1:Address>
          </p1:DeviceAddress>
          <p1:Hub>
            <p1:Address>1</p1:Address>
            <p1:HardwareID>1</p1:HardwareID>
            <p1:FirmwareVersion>256</p1:FirmwareVersion>
            <p1:ClockHz>42000000</p1:ClockHz>
            <p1:DelayNanoSeconds>2547</p1:DelayNanoSeconds>
          </p1:Hub>
          <p1:FrameClockHz>250000000</p1:FrameClockHz>
          <p1:MaxCurrent>126.8</p1:MaxCurrent>
          <p1:Enable>false</p1:Enable>
          <p1:ChannelZeroCurrent>100</p1:ChannelZeroCurrent>
          <p1:ChannelOneCurrent>0</p1:ChannelOneCurrent>
          <p1:PulseDuration>10</p1:PulseDuration>
          <p1:PulsePeriod>50</p1:PulsePeriod>
          <p1:BurstPulseCount>5</p1:BurstPulseCount>
          <p1:InterBurstInterval>200</p1:InterBurstInterval>
          <p1:TrainBurstCount>3</p1:TrainBurstCount>
          <p1:TrainDelay>10</p1:TrainDelay>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="5" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="7" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source3" />
    </Edges>
  </Workflow>
</WorkflowBuilder>